PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = music_focus
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  sortColumns = priority
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this experiment, you will count the number of occurrences of a specific letter in a passage while listening to different audio conditions. Press SPACE to begin. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine focustask
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    SoundComponent audio
      sound [set every repeat] = $audio_file
      startVal [time (s)] = 0.0
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    TextComponent task_text2
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $task_text
    TextboxComponent response_box
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.6, 0.1)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'music_condition': 'Instrumental', 'audio_file': 'instrumental.wav', 'task_text': 'Task Instructions:\n"Count how many times the letter \'T\' appears in this passage."\n\nText:\n"Timothy the tiger trotted through the tall trees, taking tiny steps towards the treasure trove hidden at the tip of the mountain. The time was tight, so he took a quick trek across the terrain."'},
      {'music_condition': 'Lyrics', 'audio_file': 'lyrics.wav', 'task_text': 'Task Instructions:\n"Count how many times the letter \'R\' appears in this passage."\n\nText:\n"Rachel rushed around the room, rearranging the red roses she had picked from the garden. Her thoughts raced, and she couldn’t remember where she had placed the rare ring she found earlier."'},
      {'music_condition': 'No music', 'audio_file': 'Silence.wav', 'task_text': 'Task Instructions:\n"Count how many times the letter \'E\' appears in this passage. Type your answer when ready."\n\nText:\n"Every evening, Eleanor eagerly explored enchanting environments with her energetic pet eagle. They danced elegantly under the emerald stars, enjoying endless echoes of serene melodies. Even as the night grew colder, they felt emboldened by the ethereal energy."'},
      {'music_condition': 'Instrumental', 'audio_file': 'instrumental.wav', 'task_text': 'Task Instructions:\n"Count how many times the letter \'L\' appears in this passage."\n\nText:\n"Lucy and her friends laughed loudly as they played the game. Little did they know, they were being watched by the lovely little birds perched on the branches above. The light breeze added to the joyful ambiance."\n'}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
    Routine focustask
  LoopTerminator trials
