PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = wordpriming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'laptop'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'book'},
      {'Study_word': 'chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'pastry'},
      {'Study_word': 'case'},
      {'Study_word': 'cruise'},
      {'Study_word': 'police'},
      {'Study_word': 'keys '},
      {'Study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'refrence': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'refrence': 'chart', 'old_new': 'old'},
      {'test': 't_hi_t', 'refrence': 'tshirt', 'old_new': 'old'},
      {'test': '_ou_se', 'refrence': 'mouse', 'old_new': 'old'},
      {'test': 'p_as_tr_', 'refrence': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'refrence': 'case', 'old_new': 'old'},
      {'test': '_ru_is_', 'refrence': 'crusie', 'old_new': 'old'},
      {'test': 'p_li_e', 'refrence': 'police', 'old_new': 'old'},
      {'test': 'k_y_', 'refrence': 'keys', 'old_new': 'old'},
      {'test': 'p_st_r', 'refrence': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'refrence': 'board', 'old_new': 'old'},
      {'test': '_a_bl_', 'refrence': 'marble', 'old_new': 'old'},
      {'test': '_ho_e', 'refrence': 'phone', 'old_new': 'old'},
      {'test': '_oo_', 'refrence': 'book', 'old_new': 'old'},
      {'test': 'c_s_io_', 'refrence': 'cushion', 'old_new': 'old'},
      {'test': 'ta_l_', 'refrence': 'table', 'old_new': 'new'},
      {'test': 'p_nc_l', 'refrence': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'refrence': 'vase', 'old_new': 'new'},
      {'test': 'bo_t_e', 'refrence': 'bottle', 'old_new': 'new'},
      {'test': 'c_m_ra', 'refrence': 'camera', 'old_new': 'new '}]
    Routine test
  LoopTerminator trials_2
